
storageDir: "./data_test"

# Devices are defined in another config file:
devices:

    DAQ:
        driver: 'NiDAQ'
        mock: True  # this is a fake device; remove this line for real NI DAQ devices.

        # Default mode for AI channels. Options are 'NRSE', 'RSE', and 'DIFF'
        # This may be overridden for individual channels.
        defaultAIMode: 'NRSE'

        # Default input/output voltage ranges
        defaultAIRange: [-10, 10]
        defaultAORange: [-10, 10]

    # A simulated patch-clamp amplifier. It is connected to a Hodgkin-Huxley
    # neuron model, allowing some of ACQ4's acquisition modules to be tested on
    # a "real" system.
    Clamp1:
        driver: 'MockClamp'
        simulator: 'builtin'  # Also supports 'neuron' if you have neuron+python
                                # installed. See lib/devices/MockClamp/neuronSim.py.

        # Define two connections to the DAQ:
        Command:
            device: 'DAQ'
            channel: '/Dev1/ao0'
            type: 'ao'
        ScaledSignal:
            device: 'DAQ'
            channel: '/Dev1/ai5'
            mode: 'NRSE'
            type: 'ai'

        # Default holding values.
        icHolding: 0.0
        vcHolding: -65e-3

modules:
    Data Manager:
        module:  'DataManager'
        shortcut: 'F2'
    Task Runner:
        module: 'TaskRunner'
        shortcut: 'F6'
        config:
            ## Directory where Task Runner stores its saved tasks.
            taskDir: 'config/example/protocols'
    Camera:
        module: 'Camera'
        shortcut: 'F5'
    Patch Simulated:
        module: 'Patch'
        shortcut: 'F3'
        config:
            clampDev: 'Clamp1'
    Console:
        module: 'Console'
        config: None
    TaskMonitor:
        module: 'TaskMonitor'

misc:
    ## Should camera image processing make use of CUDA-enabled gpus
    cudaImageProcessing: True

    ## Default compression method to use when writing HDF5 data files. Examples:
    ##   'gzip'        # Widely available filter, but slow
    ##   ('gzip', 1)   # Same filter with compression level given (0-9)
    ##   'lzf'         # Fastest compression; generally only available with h5py
    ##   'szip'        # Proprietary filter; faster but not available everywhere
    ##   None          # No compression
    ## By default, we disable compression because 'gzip' is too slow and
    ## 'lzf' / 'szip' are not available on all HDF5 installations.
    defaultCompression: None

    ## Defines the folder types that are available when creating a new folder via
    ## the Data Manager. Each folder type consists of a set of metadata fields
    ## that will be created with the folder.
    folderTypes: readConfigFile('folderTypes.cfg')

    ## Base directory where ACQ4 will keep acquired data. It is recommended
    ## that experimenters create a hierarchy of folders within this directory to
    ## organize their data.
    # storageDir: '/home/user/data'

## For controlling the appearance of the GUI:
stylesheet: 'style.css'
